CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Crudo
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Crudo
    Name the primary objects to be identified:Organoids
    Typical diameter of objects, in pixel units (Min,Max):120,250
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.45
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Organoids
    Name the objects to be identified:More_organoides
    Select the method to identify the secondary objects:Propagation
    Select the input image:Crudo
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:More_organoides
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Crudo
    Name the output image:Bordes
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#22FF02
    Select objects to display:More_organoides

OverlayObjects:[module_num:9|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
    Input:Crudo
    Name the output image:Relleno
    Objects:More_organoides
    Opacity:1

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:More_organoides
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:plasma

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Bordes
    Select method for constructing file names:From image filename
    Select image name for file prefix:Crudo
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\cellprofiler_segmentation\\outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Relleno
    Select method for constructing file names:From image filename
    Select image name for file prefix:Crudo
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segment
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\cellprofiler_segmentation\\segments
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\cellprofiler_segmentation\\data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:morph_
    Overwrite existing files without warning?:No
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