CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:43
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw
    Name the output image:Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:800,1800
    Top and bottom rectangle positions:1000,2000
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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notes:['Separate the different colors into different channels, so it is easier to segmentate subcellular components (red=nuclei; green=membrane).']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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:raw_red
    Convert green to gray?:Yes
    Name the output image:raw_green
    Convert blue to gray?:Yes
    Name the output image:raw_blue
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
ColorToGray:[module_num:7|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notes:['Obtain the original image in grayscale.']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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:raw_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Smooth:[module_num:8|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
    Select the input image:raw_red
    Name the output image:smooth_red
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7.0
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
ReduceNoise:[module_num:9|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
    Select the input image:smooth_red
    Name the output image:noise_red
    Size:7
    Distance:11
    Cut-off distance:0.1

Threshold:[module_num:10|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notes:['Thresholding and smoothing the nuclei channel prior to segmentation.']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
    Select the input image:noise_red
    Name the output image:nuclei
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:11|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notes:['Remove little holes in the thresholded nuclei.']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
    Select the input image:nuclei
    Name the output image:nuclei_holes
    Size of holes to fill:50

Watershed:[module_num:12|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notes:['Segmentation of the nuclei']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
    Select the input image:nuclei_holes
    Name the output object:watershed_nuclei
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:raw_red
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:15
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

Smooth:[module_num:13|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
    Select the input image:raw_green
    Name the output image:smooth_green
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7.0
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
ReduceNoise:[module_num:14|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
    Select the input image:smooth_green
    Name the output image:noise_green
    Size:7
    Distance:11
    Cut-off distance:0.1

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:noise_green
    Name the output image:features_green
    Select the operation:Enhance
    Feature size:20
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:16|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
    Select the input image:features_green
    Name the output image:membrane
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:17|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
    Select the input image:membrane
    Name the output image:membrane_holes
    Size of holes to fill:5

ConvertImageToObjects:[module_num:18|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
    Select the input image:membrane_holes
    Name the output object:object_membrane
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ImageMath:[module_num:19|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:cytoplasm
    Image or measurement?:Image
    Select the first image:membrane_holes
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Watershed:[module_num:20|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
    Select the input image:cytoplasm
    Name the output object:segmented_cytoplasm
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:segmented_cytoplasm
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:22|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
    Select the objects to filter:segmented_cytoplasm
    Name the output objects:filtered_segmented_cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:10000
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
MeasureObjectSizeShape:[module_num:23|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
    Select object sets to measure:filtered_segmented_cytoplasm, segmented_cytoplasm
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:24|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
    Select the objects to filter:filtered_segmented_cytoplasm
    Name the output objects:filtered_segmented_cytoplasm_more
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.95
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
MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:filtered_segmented_cytoplasm, watershed_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw_gray
    Name the output image:borders
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0613FF
    Select objects to display:watershed_nuclei

OverlayObjects:[module_num:27|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
    Input:raw_gray
    Name the output image:filler
    Objects:watershed_nuclei
    Opacity:0.5

OverlayObjects:[module_num:28|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
    Input:raw_gray
    Name the output image:membrane_img
    Objects:object_membrane
    Opacity:0.5

OverlayObjects:[module_num:29|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
    Input:membrane_img
    Name the output image:membrane_nuclei_img
    Objects:watershed_nuclei
    Opacity:0.5

OverlayObjects:[module_num:30|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
    Input:membrane_img
    Name the output image:membrane_cyto_img
    Objects:filtered_segmented_cytoplasm
    Opacity:0.5

DisplayDataOnImage:[module_num:31|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
    Display object or image measurements?:Object
    Select the input objects:watershed_nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:membrane_nuclei_img
    Text color:white
    Name the output image that has the measurements displayed:numbered_nuclei
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:32|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
    Display object or image measurements?:Object
    Select the input objects:filtered_segmented_cytoplasm_more
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:membrane_nuclei_img
    Text color:white
    Name the output image that has the measurements displayed:numbered_membrane
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:raw_gray
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_gray
    Saved file format:png
    Output file location:Default Output Folder sub-folder|01_gray
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:raw_red
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red
    Saved file format:png
    Output file location:Default Output Folder sub-folder|02_red
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:raw_green
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_green
    Saved file format:png
    Output file location:Default Output Folder sub-folder|03_green
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:borders
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|04_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:filler
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_filler
    Saved file format:png
    Output file location:Default Output Folder sub-folder|05_filler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:membrane_img
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_membrane
    Saved file format:png
    Output file location:Default Output Folder sub-folder|06_membrane
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:membrane_nuclei_img
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_membrane_nuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|07_membrane_nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:membrane_cyto_img
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_membrane_cyto
    Saved file format:png
    Output file location:Default Output Folder sub-folder|08_membrane_cyto
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:numbered_nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_numbered_nuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|09_numbered_nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:numbered_membrane
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_numbered_membrane
    Saved file format:png
    Output file location:Default Output Folder sub-folder|10_numbered_membrane
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:43|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\cellprofiler_segmentation\\data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:morph_
    Overwrite existing files without warning?:Yes
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